PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = vSearchAlpha3
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Routines
  Routine fixation1
    TextComponent fix1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine instruction1
    TextComponent instr1
      letterHeight = 0.05
      pos = [0,0.15]
      startVal [time (s)] = 0.0
      text = In this task you will see sets of shapes made of four different shapes as outlined below. Only press space if you see the “T” shape, which is the last shape. Otherwise, do not respond. Press space to continue.
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    KeyboardComponent keyResp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent l1ex
      image = L1.png
      pos = (-0.3, -0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent l2ex
      image = L2.png
      pos = (-0.1, -0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent t1ex
      image = T1.png
      pos = (0.1, -0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent tTex
      image = TT.png
      pos = (0.3, -0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        This is the end of the experiment.
        Thank you for your time.
  Routine trial1
    TextComponent trial1Fix
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trial1L11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial1L12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial1L21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial1L22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial1T11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial1T12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial1TT
      image = TT.png
      pos [set every repeat] = [loc13,loc14]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent trial1Resp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      storeCorrect = True
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  Routine fixation2
    TextComponent fix2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial2
    TextComponent trial2Fix
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trial2L11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2L12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2L21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2L22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2T11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2T12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2TT
      image = TT.png
      pos [set every repeat] = [loc13,loc14]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent trial2Resp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      storeCorrect = True
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  Routine breakTime1
    TextComponent breakText1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A quick break before the next set of trials.
        Press space to continue.
    KeyboardComponent breakResp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine breakTime2
    TextComponent breakText2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A quick break before the next set of trials.
        Press space to continue.
    KeyboardComponent breakResp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation3
    TextComponent fix3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial3
    TextComponent trial3Fix
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent Trial3L11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent Trial3L12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent Trial3L21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent Trial3L22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent Trial3T11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent Trial3T12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent Trial3TT
      image = TT.png
      pos [set every repeat] = [loc13,loc14]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent trial3Resp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      storeCorrect = True
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Flow
  Routine instruction1
  Routine fixation1
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = vSearchCond1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', 0.4), ('loc2', 0.0), ('loc3', -0.2), ('loc4', 0.2), ('loc5', 0.0), ('loc6', 0.0), ('loc7', -0.4), ('loc8', -0.2), ('loc9', 0.4), ('loc10', 0.2), ('loc11', 0.0), ('loc12', 0.2), ('loc13', None), ('loc14', None), ('corrAns', None)]),
      OrderedDict([('loc1', 0.4), ('loc2', -0.2), ('loc3', 0.4), ('loc4', 0.0), ('loc5', 0.2), ('loc6', 0.2), ('loc7', None), ('loc8', None), ('loc9', 0.0), ('loc10', 0.0), ('loc11', -0.2), ('loc12', 0.2), ('loc13', 0.4), ('loc14', 0.2), ('corrAns', 'space')]),
      OrderedDict([('loc1', 0.0), ('loc2', 0.2), ('loc3', 0.4), ('loc4', -0.2), ('loc5', -0.4), ('loc6', -0.2), ('loc7', 0.0), ('loc8', 0.0), ('loc9', 0.2), ('loc10', 0.2), ('loc11', None), ('loc12', None), ('loc13', 0.2), ('loc14', -0.2), ('corrAns', 'space')]),
      OrderedDict([('loc1', -0.2), ('loc2', 0.2), ('loc3', 0.4), ('loc4', -0.2), ('loc5', 0.0), ('loc6', 0.2), ('loc7', 0.0), ('loc8', 0.2), ('loc9', -0.4), ('loc10', -0.2), ('loc11', 0.0), ('loc12', 0.0), ('loc13', None), ('loc14', None), ('corrAns', None)]),
      OrderedDict([('loc1', 0.4), ('loc2', -0.2), ('loc3', None), ('loc4', None), ('loc5', -0.4), ('loc6', 0.0), ('loc7', 0.4), ('loc8', 0.2), ('loc9', 0.0), ('loc10', 0.2), ('loc11', 0.2), ('loc12', -0.2), ('loc13', 0.0), ('loc14', 0.0), ('corrAns', 'space')])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
    Routine trial1
  LoopTerminator trials1
  Routine breakTime1
  Routine fixation2
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = vSearchCond2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', 0.2), ('loc2', 0.2), ('loc3', -0.4), ('loc4', -0.2), ('loc5', 0.4), ('loc6', -0.2), ('loc7', 0.0), ('loc8', 0.0), ('loc9', -0.2), ('loc10', 0.2), ('loc11', None), ('loc12', None), ('loc13', -0.4), ('loc14', 0.2), ('corrAns', 'space')]),
      OrderedDict([('loc1', 0.0), ('loc2', 0.2), ('loc3', 0.4), ('loc4', 0.0), ('loc5', -0.2), ('loc6', 0.2), ('loc7', 0.0), ('loc8', 0.0), ('loc9', -0.4), ('loc10', -0.2), ('loc11', 0.4), ('loc12', 0.2), ('loc13', None), ('loc14', None), ('corrAns', None)]),
      OrderedDict([('loc1', -0.2), ('loc2', 0.2), ('loc3', 0.4), ('loc4', -0.2), ('loc5', 0.4), ('loc6', 0.0), ('loc7', 0.2), ('loc8', 0.2), ('loc9', None), ('loc10', None), ('loc11', 0.0), ('loc12', 0.0), ('loc13', 0.0), ('loc14', -0.2), ('corrAns', 'space')]),
      OrderedDict([('loc1', None), ('loc2', None), ('loc3', 0.0), ('loc4', 0.2), ('loc5', 0.4), ('loc6', -0.2), ('loc7', -0.4), ('loc8', -0.2), ('loc9', 0.0), ('loc10', 0.0), ('loc11', 0.2), ('loc12', 0.2), ('loc13', 0.2), ('loc14', -0.2), ('corrAns', 'space')]),
      OrderedDict([('loc1', 0.0), ('loc2', 0.0), ('loc3', -0.2), ('loc4', 0.2), ('loc5', 0.4), ('loc6', -0.2), ('loc7', 0.0), ('loc8', 0.2), ('loc9', 0.0), ('loc10', -0.2), ('loc11', -0.4), ('loc12', -0.2), ('loc13', None), ('loc14', None), ('corrAns', None)])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
    Routine trial2
  LoopTerminator trials2
  Routine breakTime2
  Routine fixation3
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = vSearchCond3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', None), ('loc2', None), ('loc3', -0.4), ('loc4', -0.2), ('loc5', 0.4), ('loc6', -0.2), ('loc7', 0.0), ('loc8', 0.0), ('loc9', -0.2), ('loc10', 0.2), ('loc11', 0.2), ('loc12', 0.2), ('loc13', 0.0), ('loc14', 0.2), ('corrAns', 'space')]),
      OrderedDict([('loc1', 0.0), ('loc2', 0.2), ('loc3', 0.4), ('loc4', 0.0), ('loc5', -0.2), ('loc6', 0.2), ('loc7', 0.0), ('loc8', 0.0), ('loc9', -0.4), ('loc10', -0.2), ('loc11', 0.4), ('loc12', 0.2), ('loc13', None), ('loc14', None), ('corrAns', None)]),
      OrderedDict([('loc1', -0.2), ('loc2', 0.2), ('loc3', -0.4), ('loc4', -0.2), ('loc5', -0.4), ('loc6', 0.0), ('loc7', None), ('loc8', None), ('loc9', 0.2), ('loc10', 0.2), ('loc11', 0.0), ('loc12', 0.0), ('loc13', -0.2), ('loc14', -0.2), ('corrAns', 'space')]),
      OrderedDict([('loc1', 0.2), ('loc2', 0.2), ('loc3', -0.4), ('loc4', 0.2), ('loc5', -0.4), ('loc6', -0.2), ('loc7', 0.0), ('loc8', 0.2), ('loc9', None), ('loc10', None), ('loc11', 0.4), ('loc12', -0.2), ('loc13', -0.4), ('loc14', 0.0), ('corrAns', 'space')]),
      OrderedDict([('loc1', 0.4), ('loc2', -0.2), ('loc3', 0.0), ('loc4', 0.2), ('loc5', None), ('loc6', None), ('loc7', -0.4), ('loc8', -0.2), ('loc9', 0.0), ('loc10', 0.0), ('loc11', 0.2), ('loc12', 0.2), ('loc13', 0.0), ('loc14', -0.2), ('corrAns', 'space')])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
    Routine trial3
  LoopTerminator trials3
  Routine end
